PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
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Routines
  Routine WelcomeScreen
    TextComponent textWelcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        1. Please look at the central box.
        2. Respond to the target as quickly as possible by pressing the space key.
    KeyboardComponent keyWelcome
      allowedKeys = 'space','enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartScreen
    TextComponent textStart
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Let's start the experiment.

        Press space to begin.
    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrialScreenBefore
    ImageComponent imageTrailBefore_1
      color = $[1.000,1.000,1.000]
      image = images/light_grey_box
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 256
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    ImageComponent imageTrialBefore_2
      image = images/light_grey_box
      pos = (-0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent imageTrialBefore_3
      image = images/light_grey_box
      pos = (0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine TrialScreenCue
    ImageComponent imageTrialCue_1
      image [set every repeat] = $image_cue_1
      pos = (-0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent imageTrialCue_2
      image [set every repeat] = $image_cue_2
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    ImageComponent imageTrialCue_3
      image [set every repeat] = $image_cue_3
      pos = (0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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  Routine TrialSceenTarget
    ImageComponent imageTrialTarget_1
      image [set every repeat] = $image_target_1
      pos = (-0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = $startTime
      stopVal [time (s)] = $endTime
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    ImageComponent imageTrialTarget_2
      image [set every repeat] = $image_target_2
      size = (0.25, 0.25)
      startVal [time (s)] = $startTime
      stopVal [time (s)] = $endTime
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    ImageComponent imageTrialTarget_3
      image [set every repeat] = $image_target_3
      pos = (0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = $startTime
      stopVal [time (s)] = $endTime
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    KeyboardComponent keyResponse
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $startTime
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  Routine Blank500
    TextComponent textBlank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine EndScreen
    TextComponent textEndSceen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Thank you for participating. 
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Flow
  Routine WelcomeScreen
  Routine StartScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_stimuli.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('image_cue_1', 'images/light_grey_box_with_cue'), ('image_cue_2', 'images/light_grey_box'), ('image_cue_3', 'images/light_grey_box'), ('image_target_1', 'images/light_grey_box'), ('image_target_2', 'images/light_grey_box_with_target'), ('image_target_3', 'images/light_grey_box'), ('targetStart', 0), ('startTime', 0.0), ('endTime', 0.15)]),
      OrderedDict([('image_cue_1', 'images/light_grey_box_with_cue'), ('image_cue_2', 'images/light_grey_box'), ('image_cue_3', 'images/light_grey_box'), ('image_target_1', 'images/light_grey_box'), ('image_target_2', 'images/light_grey_box_with_target'), ('image_target_3', 'images/light_grey_box'), ('targetStart', 0), ('startTime', 0.0), ('endTime', 0.15)]),
      OrderedDict([('image_cue_1', 'images/light_grey_box_with_cue'), ('image_cue_2', 'images/light_grey_box'), ('image_cue_3', 'images/light_grey_box'), ('image_target_1', 'images/light_grey_box'), ('image_target_2', 'images/light_grey_box_with_target'), ('image_target_3', 'images/light_grey_box'), ('targetStart', 0), ('startTime', 0.0), ('endTime', 0.15)]),
      OrderedDict([('image_cue_1', 'images/light_grey_box_with_cue'), ('image_cue_2', 'images/light_grey_box'), ('image_cue_3', 'images/light_grey_box'), ('image_target_1', 'images/light_grey_box'), ('image_target_2', 'images/light_grey_box_with_target'), ('image_target_3', 'images/light_grey_box'), ('targetStart', 0), ('startTime', 0.0), ('endTime', 0.15)])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
    Routine TrialScreenBefore
    Routine TrialScreenCue
    Routine TrialSceenTarget
    Routine Blank500
  LoopTerminator trials
  Routine EndScreen
